PsychoPy2experiment version="2022.2.5"
Settings
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = REPSWITCH_1
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Welcome
    TextComponent textWelcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Welcome to the experiment!
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  Routine Instructions
    TextComponent textInstructions
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 10
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      text:
        In this task you will have to name the objects you see on the screen.
        If the background is red, type the name of the object.
        If the background is blue, say the name of the object out loud.
  Routine blank500
    TextComponent textBlank500
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = .5
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  Routine Goodbye
    TextComponent textGoodbye
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2
      text = Thank you for participating!
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Flow
  Routine Welcome
  Routine blank500
  Routine Instructions
  Routine blank500
  Routine trial
  Routine blank500
  Routine Goodbye
